#  Example qudi-core configuration file.
#

global:
  startup_modules: []

hardware:
  dummy_translation_stage:
    module.Class: 'translation_stage.dummy_translation_stage.DummyXYStage'
    options:
        x_min: 0
        x_max: 200
        y_min: 0
        y_max: 200
        z_min: 0
        z_max: 200
        delay_after_move: 0.5
        first_axis_label: 'x'
        second_axis_label: 'y'
        third_axis_label: 'z'

  ms2000:
    module.Class: 'translation_stage.MS2000_ASI.MS2000'
    options:
        com_port: '/dev/ttyUSB0'
        baud_rate: '9600' #'115200'
        first_axis_label: 'x'
        second_axis_label: 'y'
        third_axis_label: 'z'
        delay_after_move: 0.5
        LED connected: True

  hamilton_valve:
    module.Class: 'fluidics_valve.hamilton_valve.HamiltonValve'
    options :
        com_port: '/dev/ttyUSB0'
        num_valves: 3
        daisychain_ID:
            - 'a'
            - 'b'
            - 'c'
        name:
            - 'Buffer 8-way valve'
            - 'RT rinsing 2-way valve'
            - 'Syringe 2-way valve'
        number_outputs:
            - 8
            - 2
            - 2
        valve_positions:
            - - '1'
              - '2'
              - '3'
              - '4'
              - '5'
              - '6'
              - '7'
              - '8'
            - - '1: Rinse needle'
              - '2: Inject probe'
            - - '1: Syringe'
              - '2: Pump'

  pi_stage:
    module.Class: 'translation_stage.PI_3_axis_stage.PIMotorStage'
    options:
        daisychain_connection: True
        serialnumber_master:  '0019550121'
        first_axis_controllername: 'C-863'
        second_axis_controllername: 'C-863'
        third_axis_controllername: 'C-863'
        first_axis_label: 'x'
        second_axis_label: 'y'
        third_axis_label: 'z'
        first_axis_daisychain_id: 2  # number of the device in the daisy chain (sorted by increasing serial number of the controller)
        second_axis_daisychain_id: 3
        third_axis_daisychain_id: 1
        first_axis_type: 'linear'
        second_axis_type: 'linear'
        third_axis_type: 'linear'


logic:
  roi_logic:
    module.Class: 'roi_logic.RoiLogic'
    connect:
      stage: 'ms2000'

gui:
  roi_gui:
    module.Class: 'roi_manager.roi_gui.RoiGUI'
    connect:
      roi_logic: 'roi_logic'
    options:
        stagemarker_width: 300
        default_path: 'C:\\Users\\CBS\qudi_files\qudi_roi_lists'

